PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = finalassignment
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = The list of words is as follows:
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  Routine words
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $words_list
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  Routine answers
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Write the words you remember from the list and seperate them with a ","
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    TextboxComponent textbox
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Submit
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  Routine thankyou
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thankyou for your participation :)
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/assignment_words.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words_list': 'driver'},
      {'words_list': 'deliver'},
      {'words_list': 'accident '},
      {'words_list': 'identify'},
      {'words_list': 'district'},
      {'words_list': 'different '},
      {'words_list': 'native'},
      {'words_list': 'sacred'},
      {'words_list': 'female'},
      {'words_list': 'institution '},
      {'words_list': 'powder'},
      {'words_list': 'picture '},
      {'words_list': 'proposal'},
      {'words_list': 'freeze '},
      {'words_list': 'silence '},
      {'words_list': 'holiday '},
      {'words_list': 'passenger '},
      {'words_list': 'reputation '},
      {'words_list': 'minister'},
      {'words_list': 'shade '},
      {'words_list': 'christams '},
      {'words_list': 'profit '},
      {'words_list': 'hair'},
      {'words_list': 'lady'},
      {'words_list': 'respond '},
      {'words_list': 'publicaly '},
      {'words_list': 'grocery '},
      {'words_list': 'patch '},
      {'words_list': 'sentence '},
      {'words_list': 'towards '},
      {'words_list': 'point '},
      {'words_list': 'private '},
      {'words_list': 'pop'},
      {'words_list': 'student '},
      {'words_list': 'cabinet'},
      {'words_list': 'abroad '},
      {'words_list': 'priest '},
      {'words_list': 'retain '},
      {'words_list': 'athletic '},
      {'words_list': 'exhibition '},
      {'words_list': 'partner '},
      {'words_list': 'english '},
      {'words_list': 'always '},
      {'words_list': 'trail '},
      {'words_list': 'die'},
      {'words_list': 'urge '},
      {'words_list': 'grain'},
      {'words_list': 'leaf'}]
    Routine words
  LoopTerminator trials
  Routine answers
  Routine thankyou
